#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    arduino_uno:
        module.Class: 'arduino.arduino_uno.ArduinoUno'
        arduino_port: 'COM11'
        n_odor_available: 4
        odors: ['OCT', 'Banana', 'no odor', 'no odor']  # according to valves order
        valve_odor_1_write: '2'
        valve_odor_1_read: 'A0'
        valve_odor_2_write: '3'
        valve_odor_2_read: 'A1'
        valve_odor_3_write: '4'
        valve_odor_3_read: 'A2'
        valve_odor_4_write: '5'
        valve_odor_4_read: 'A3'
        mixing_valve_write: '6'
        mixing_valve_read: 'A4'
        switch_purge_arena_valve_write: '7'
        switch_purge_arena_valve_read: 'A5'
        3_way_valve_write: '8'
        3_way_valve_read: 'D13'
        switch_quadrant_valve_write: '9'
        switch_quadrant_valve_read: 'D12'
        shutter_write: '10'
        shutter_read: 'D11'

    MFC:
        module.Class: 'MFC.MFC.MFC'
        MFC_port: 'COM12'

        MFC_names:
            - MFC_1
            - MFC_2
            - MFC_purge
            - MFC_second_quadrant

        Daisy_chain_ids:
            - 1
            - 0
            - 2
            - 3


    motor_FlyArena:
        module.Class: 'motor.motorFlyArena.motor_FlyArena.MotorControl'

        port : 'COM4'

logic:
    odor_circuit_arduino_logic:
        module.Class: 'fly_arena.odor_circuit_arduino_logic.OdorCircuitArduinoLogic'
        connect:
            arduino_uno: 'arduino_uno'
            MFC: 'MFC'

    optogenetic_logic:
        module.Class: 'fly_arena.optogenetic_logic.OptogeneticLogic'
        connect:
            arduino_uno: 'arduino_uno'
        patterns_path : 'C:/Users/sCMOS-1/qudi_files/Image_opto_flyarena'
        background_pattern : 'Black.png'

    experiment_config_logic:
        module.Class: 'fly_arena.training_configurator_logic.ExpConfigLogic'
        experiments:
            - 'Long-term training'
        connect:
            odor_logic: 'odor_circuit_arduino_logic'
            opto_logic: 'optogenetic_logic'

    task_logic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            LongTermTraining:
                module: 'flyArena_long_term_training'
                needsmodules:
                    odor: 'odor_circuit_arduino_logic'
                    opto: 'optogenetic_logic'
                config:
                    path_to_user_config: 'C:/Users/sCMOS-1/qudi_files/qudi_task_config_files/long_term_training_FlyArena.yml'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    Fly Arena :
        module.Class: 'Fly_Arena_GUIs.odor_circuit.odor_circuit_arduino_gui.OdorCircuitGUI'
        connect:
            odor_logic: 'odor_circuit_arduino_logic'
        #path to save:
        default_quadrant_flow: 0.1  # in sL/min
        Path_MFC : 'C:/Users/sCMOS-1/qudi_files/Flow/Donnees_graph/'
        Fluidics_off_path: 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/Schema_fluidic_odors_off.PNG'
        Fluidics_on_path: 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/Schema_fluidic_odors_on.PNG'
        config_path:
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_0_all_OFF.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_1_2_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_2_2_quadrants_inject.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_3_prepare_odor_1_2_quadrants_switch_off.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_4_prepare_odor_1_2_quadrants_switch_on.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_5_prepare_odor_1_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_5_prepare_odor_1_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_6_inject_odor_1_2_quadrants_switch_off.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_7_inject_odor_1_2_quadrants_switch_on.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_8_inject_odor_1_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_8_inject_odor_1_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_9_prepare_odor_2_2_quadrants_switch_off.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_10_prepare_odor_2_2_quadrants_switch_on.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_11_prepare_odor_2_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_11_prepare_odor_2_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_12_inject_odor_2_2_quadrants_switch_off.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_13_inject_odor_2_2_quadrants_switch_on.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_14_inject_odor_2_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_14_inject_odor_2_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_15_2_quadrants_switch_ON.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_16_4_quadrants.PNG'
            - 'C:/Users/sCMOS-1/qudi-cbs/gui/Fly_Arena_GUIs/odor_circuit/image/config_16_4_quadrants.PNG'

        config_valve:
            - [0, 0, 0, 0, 0, 0, 0, 0]
            - [0, 0, 0, 0, 1, 0, 0, 0]
            - [0, 0, 0, 0, 1, 1, 0, 0]
            - [1, 0, 0, 0, 0, 0, 0, 0]
            - [1, 0, 0, 0, 0, 0, 0, 1]
            - [1, 0, 0, 0, 0, 0, 1, 0]
            - [1, 0, 0, 0, 0, 0, 1, 1]
            - [1, 0, 0, 0, 0, 1, 0, 0]
            - [1, 0, 0, 0, 0, 1, 0, 1]
            - [1, 0, 0, 0, 0, 1, 1, 0]
            - [1, 0, 0, 0, 0, 1, 1, 1]
            - [0, 1, 0, 0, 0, 0, 0, 0]
            - [0, 1, 0, 0, 0, 0, 0, 1]
            - [0, 1, 0, 0, 0, 0, 1, 0]
            - [0, 1, 0, 0, 0, 0, 1, 1]
            - [0, 1, 0, 0, 0, 1, 0, 0]
            - [0, 1, 0, 0, 0, 1, 0, 1]
            - [0, 1, 0, 0, 0, 1, 1, 0]
            - [0, 1, 0, 0, 0, 1, 1, 1]
            - [0, 0, 0, 0, 1, 0, 0, 1]
            - [0, 0, 0, 0, 1, 0, 1, 0]
            - [0, 0, 0, 0, 1, 0, 1, 1]

    Optogenetic:
        module.Class: 'Fly_Arena_GUIs.optogenetic.optogenetic_gui.OptogeneticGUI'
        connect:
            optogenetic_logic: 'optogenetic_logic'

    Experiment_Configurator:
        module.Class: 'experiment_configurator.training_configurator_gui.ExpConfiguratorGUI'
        default_location_qudi_files: 'C:/Users/sCMOS-1/qudi_files'
        _ui_window_filename: 'ui_exp_configurator_flyarena.ui'
        connect:
            exp_logic: 'experiment_config_logic'

    Taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'task_logic'


